PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 820]
  expName = Implicit Bias proj
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine Consent
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    TextComponent Consent_slide
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment!

        Please read the following points carefully:

        - Your participation is completely voluntary.
        - You may stop or quit the study at any time without any penalty.
        - No personal or identifying information will be collected.
        - Your responses will remain completely anonymous and will be used only for academic purposes.
        - Some words may refer to gender roles or occupations, but the study is about reaction times, not personal beliefs.

        If you agree to participate, please press the SPACEBAR to continue.

        If you do not wish to take part, you may close the window now.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block1Trial
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    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    TextComponent text_3
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent left_label2
      letterHeight = 0.02
      pos = (-0.45 , 0.38)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      text = E = MALE / CAREER
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    TextComponent right_label2
      letterHeight = 0.02
      pos = (0.45, 0.38)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = I = FEMALE / FAMILY
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    KeyboardComponent key_resp_3
      allowedKeys = 'e','i'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Block1Inst
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see words appear one at a time in the center of the screen.

        You will need to sort each word into the correct category using two keys:

        Press **E** for the words that belong to the LEFT category.
        Press **I** for the words that belong to the RIGHT category.

        For example:
        - If you see "Doctor" and the left category is CAREER, press E.
        - If you see "Home" and the right category is FAMILY, press I.

        Try to respond as quickly and accurately as you can.

        This is just a short practice round so you can get used to the task.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceB1
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $word
    TextComponent right_label
      letterHeight = 0.02
      pos = (0.45, 0.38)
      startVal [time (s)] = 0.0
      text = I = FEMALE / FAMILY
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    TextComponent left_label
      letterHeight = 0.02
      pos = (-0.45, 0.38)
      startVal [time (s)] = 0.0
      text = E = MALE / CAREER
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    KeyboardComponent resp
      allowedKeys = 'e','i'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine B2Inst
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    TextComponent text_4
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        BLOCK 2

        In this part, the key assignments are REVERSED.

        Press E for:
        - MALE names
        - FAMILY-related words

        Press I for:
        - FEMALE names
        - CAREER-related words

        Examples:
        - "Father" → E
        - "Engineer" → I
        - "Man" → E
        - "Manager" → I

        Please respond as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
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    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great! Let's start now


        Press SPACE to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine B2_practice
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    PolygonComponent fixation3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_6
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent left
      letterHeight = 0.02
      pos = (-0.45, 0.38)
      startVal [time (s)] = 0.0
      text = E = MALE / FAMILY
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    TextComponent right
      letterHeight = 0.02
      pos = (0.45, 0.38)
      startVal [time (s)] = 0.0
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      text:
        I = FEMALE / CAREER
    KeyboardComponent key_resp_6
      allowedKeys = 'e' , 'i'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine start2
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    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Great! Let's start now


        Press SPACE to continue
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block2_Trial
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    PolygonComponent fixation4
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_8
      letterHeight = 0.06
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    TextComponent left2
      letterHeight = 0.02
      pos = (-0.45, 0.38)
      startVal [time (s)] = 0.0
      text = E = MALE / FAMILY
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    TextComponent right2
      letterHeight = 0.02
      pos = (0.45, 0.38)
      startVal [time (s)] = 0.0
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      text:
        I = FEMALE / CAREER
    KeyboardComponent key_resp_8
      allowedKeys = 'e','i'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Thankyou
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thankyou
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    KeyboardComponent key_resp_9
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Consent
  Routine Block1Inst
  LoopInitiator B1P loopType="TrialHandler"
    conditionsFile = cond practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'engineer', 'correct_key': 'e'},
      {'word': 'nurse', 'correct_key': 'i'},
      {'word': 'man', 'correct_key': 'e'},
      {'word': 'mother', 'correct_key': 'i'}]
    Routine practiceB1
  LoopTerminator B1P
  Routine Start
  LoopInitiator Block1 loopType="TrialHandler"
    conditionsFile = Block1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'engineer', 'correct_key': 'e'},
      {'word': 'pilot', 'correct_key': 'e'},
      {'word': 'manager', 'correct_key': 'e'},
      {'word': 'soldier', 'correct_key': 'e'},
      {'word': 'scientist', 'correct_key': 'e'},
      {'word': 'doctor', 'correct_key': 'e'},
      {'word': 'lawyer', 'correct_key': 'e'},
      {'word': 'businessman', 'correct_key': 'e'},
      {'word': 'architect', 'correct_key': 'e'},
      {'word': 'mechanic', 'correct_key': 'e'},
      {'word': 'technician', 'correct_key': 'e'},
      {'word': 'banker', 'correct_key': 'e'},
      {'word': 'carpenter', 'correct_key': 'e'},
      {'word': 'professor', 'correct_key': 'e'},
      {'word': 'director', 'correct_key': 'e'},
      {'word': 'accountant', 'correct_key': 'e'},
      {'word': 'plumber', 'correct_key': 'e'},
      {'word': 'electrician', 'correct_key': 'e'},
      {'word': 'athlete', 'correct_key': 'e'},
      {'word': 'programmer', 'correct_key': 'e'},
      {'word': 'entrepreneur', 'correct_key': 'e'},
      {'word': 'surgeon', 'correct_key': 'e'},
      {'word': 'farmer', 'correct_key': 'e'},
      {'word': 'salesman', 'correct_key': 'e'},
      {'word': 'chef', 'correct_key': 'e'},
      {'word': 'mother', 'correct_key': 'i'},
      {'word': 'wife', 'correct_key': 'i'},
      {'word': 'sister', 'correct_key': 'i'},
      {'word': 'daughter', 'correct_key': 'i'},
      {'word': 'nurse', 'correct_key': 'i'},
      {'word': 'teacher', 'correct_key': 'i'},
      {'word': 'homemaker', 'correct_key': 'i'},
      {'word': 'family', 'correct_key': 'i'},
      {'word': 'home', 'correct_key': 'i'},
      {'word': 'baby', 'correct_key': 'i'},
      {'word': 'child', 'correct_key': 'i'},
      {'word': 'caregiver', 'correct_key': 'i'},
      {'word': 'aunt', 'correct_key': 'i'}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
    Routine Block1Trial
  LoopTerminator Block1
  Routine B2Inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Block2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'father', 'correct_key': 'e'},
      {'word': 'husband', 'correct_key': 'e'},
      {'word': 'brother', 'correct_key': 'e'},
      {'word': 'son', 'correct_key': 'e'},
      {'word': 'uncle', 'correct_key': 'e'},
      {'word': 'grandfather', 'correct_key': 'e'},
      {'word': 'caretaker', 'correct_key': 'e'},
      {'word': 'provider', 'correct_key': 'e'},
      {'word': 'guardian', 'correct_key': 'e'},
      {'word': 'dad', 'correct_key': 'e'},
      {'word': 'supporter', 'correct_key': 'e'},
      {'word': 'protector', 'correct_key': 'e'},
      {'word': 'sibling', 'correct_key': 'e'},
      {'word': 'housemate', 'correct_key': 'e'},
      {'word': 'bedtime', 'correct_key': 'e'},
      {'word': 'homecare', 'correct_key': 'e'},
      {'word': 'fatherhood', 'correct_key': 'e'},
      {'word': 'playtime', 'correct_key': 'e'},
      {'word': 'bedroom', 'correct_key': 'e'},
      {'word': 'chores', 'correct_key': 'e'},
      {'word': 'dinner', 'correct_key': 'e'},
      {'word': 'together', 'correct_key': 'e'},
      {'word': 'familytime', 'correct_key': 'e'},
      {'word': 'bonding', 'correct_key': 'e'},
      {'word': 'parenting', 'correct_key': 'e'},
      {'word': 'engineer', 'correct_key': 'i'},
      {'word': 'pilot', 'correct_key': 'i'},
      {'word': 'manager', 'correct_key': 'i'},
      {'word': 'soldier', 'correct_key': 'i'},
      {'word': 'scientist', 'correct_key': 'i'},
      {'word': 'doctor', 'correct_key': 'i'},
      {'word': 'lawyer', 'correct_key': 'i'},
      {'word': 'businesswoman', 'correct_key': 'i'},
      {'word': 'architect', 'correct_key': 'i'},
      {'word': 'technician', 'correct_key': 'i'},
      {'word': 'banker', 'correct_key': 'i'},
      {'word': 'carpenter', 'correct_key': 'i'}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
    Routine Block2_Trial
  LoopTerminator trials
  Routine Thankyou
